PsychoPy2experiment version="2023.2.3"
Settings
  Experiment info = {'participant': '1234'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = pix
  Use version = 2023.2.3
  Window size (pixels) = [1536, 864]
  color = -0.5294, -0.5294, -0.5294
  expName = PLR_PsychoPy_Builder
  keyboardBackend = ioHub
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Routines
  Routine kalibracio
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    CodeComponent PupilEXT_code_1
      Code Type = Py
      Begin Experiment:
        import configparser
        import time
        import PupilEXT

        config = configparser.ConfigParser()
        config.read('config.ini', encoding='utf-8-sig')

        pupilEXT = PupilEXT(config['PupilEXT']))

        pupilEXT.setupHostConnection()

        # PupilEXTInstance.startDataRecording()
        PupilEXTInstance.startImageRecording()
      Begin Routine:
        pupilEXT.incrementTrial()
      End Experiment:
        pupilEXT.stopImageRecording()
        pupilEXT.closeHostConnection()
  Routine fixcross
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    TextComponent text_fixcross
      color = black
      letterHeight = 60
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.25
      text = +
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  Routine end
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    TextComponent text_5
      color = black
      letterHeight = 32
      startVal [time (s)] = 0.0
      text = The experiment has ended. Thank you for your participation!
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    KeyboardComponent key_resp_2
      allowedKeys = 'space'
      forceEndRoutine = True
      registerOn = release
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = first key
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  Routine instruction
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    CodeComponent PupilEXT_code
      Code Type = Py
      Begin Experiment:
        from PupilEXT import PupilEXT


        pupilEXT = PupilEXT()
        pupilEXT.Enabled = True # Easy way to turn off if you are debugging

        pupilEXT.Method = 0
        pupilEXT.UDP_IP = '192.168.40.1'
        pupilEXT.UDP_Port = 6900

        # pupilEXT.Method = 1
        # pupilEXT.COM_Port = 'COM1'
        # pupilEXT.COM_BaudRate = 9600

        pupilEXT.RecordingsPath = 'C:/PupilEXT_Recordings' # A slash at the end is not necessary
        pupilEXT.ParticipantName = expInfo['participant']


        pupilEXT.setupHostConnection()

        # pupilEXT.startDataRecording()
        pupilEXT.startImageRecording()
      End Experiment:
        # pupilEXT.stopDataRecording()
        pupilEXT.stopImageRecording()
        pupilEXT.closeHostConnection()
    CodeComponent Hide_mouse
      Code Type = Auto->JS
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      Begin Routine:
        win.mouseVisible = False
        event.Mouse(visible=False)
    TextComponent text
      color = black
      letterHeight = 32
      startVal [time (s)] = 0.0
      wrapWidth = 1500
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      text:
        Welcome!
        In this experiment your task is to fixate on the + sign in the middle of the screen.
        The background will periodically change, but you do not need to respond to that.
        Please look at the screen as long as the + sign is visible, and blink only when you see the letter B.
        The experiment will take just a few minutes.

        [If you feel ready, hit SPACE to begin]
    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      registerOn = release
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = first key
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  Routine stimulus
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    CodeComponent PupilEXT_code_2
      Code Type = Py
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      Begin Routine:
        pupilEXT.incrementTrial()

        # NOTE: You can use trial increments or messages too. The advantage of
        # trial increments is that the output .csv data of eye samples will
        # contain a separate column for trial numbers of each sample, making
        # it easier to process by custom pipelines. The messages will be
        # recorded on the other side as precisely as trial increments,
        # regarding their timestamps. To best account for any additional
        # unwanted lag on the experiment PC side (type conversions,
        # serialization), the easiest is to add the frame buffer flip
        # instruction of Psychtoolbox (Screen(window,'Flip');) right after the
        # pupilEXT.incrementTrial(); or pupilEXT.sendMessage(); call(s), as the
        # program is executed serially in Matlab.
        pupilEXT.sendMessage('TRIAL ' + str(trials_loop.thisRepN+1));
    PolygonComponent background_stimulus
      fillColor = white
      shape = rectangle
      size = (2, 2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
      units = norm
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    TextComponent text_stimulus
      color = black
      letterHeight = 60
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
      text = +
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  Routine blinksAllowed
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    TextComponent text_4
      color = black
      letterHeight = 60
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      text = B
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Flow
  Routine instruction
  LoopInitiator trials_loop loopType="TrialHandler"
    loopType = sequential
    nReps = 10
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    conditions:
      [{'trial': 1, 'nr': 7, 'nback': 0},
      {'trial': 2, 'nr': 8, 'nback': 0},
      {'trial': 3, 'nr': 2, 'nback': 0},
      {'trial': 4, 'nr': 7, 'nback': 0},
      {'trial': 5, 'nr': 5, 'nback': 0},
      {'trial': 6, 'nr': 6, 'nback': 0},
      {'trial': 7, 'nr': 5, 'nback': 1},
      {'trial': 8, 'nr': 9, 'nback': 0},
      {'trial': 9, 'nr': 6, 'nback': 0},
      {'trial': 10, 'nr': 8, 'nback': 0},
      {'trial': 11, 'nr': 2, 'nback': 0},
      {'trial': 12, 'nr': 7, 'nback': 0},
      {'trial': 13, 'nr': 4, 'nback': 0},
      {'trial': 14, 'nr': 7, 'nback': 1},
      {'trial': 15, 'nr': 6, 'nback': 0},
      {'trial': 16, 'nr': 1, 'nback': 0},
      {'trial': 17, 'nr': 9, 'nback': 0},
      {'trial': 18, 'nr': 2, 'nback': 0},
      {'trial': 19, 'nr': 5, 'nback': 0},
      {'trial': 20, 'nr': 7, 'nback': 0},
      {'trial': 21, 'nr': 2, 'nback': 0},
      {'trial': 22, 'nr': 9, 'nback': 0},
      {'trial': 23, 'nr': 2, 'nback': 1},
      {'trial': 24, 'nr': 7, 'nback': 0},
      {'trial': 25, 'nr': 6, 'nback': 0},
      {'trial': 26, 'nr': 3, 'nback': 0},
      {'trial': 27, 'nr': 2, 'nback': 0},
      {'trial': 28, 'nr': 6, 'nback': 0},
      {'trial': 29, 'nr': 1, 'nback': 0},
      {'trial': 30, 'nr': 6, 'nback': 1},
      {'trial': 31, 'nr': 5, 'nback': 0},
      {'trial': 32, 'nr': 2, 'nback': 0},
      {'trial': 33, 'nr': 7, 'nback': 0},
      {'trial': 34, 'nr': 6, 'nback': 0},
      {'trial': 35, 'nr': 7, 'nback': 1},
      {'trial': 36, 'nr': 5, 'nback': 0},
      {'trial': 37, 'nr': 9, 'nback': 0},
      {'trial': 38, 'nr': 3, 'nback': 0},
      {'trial': 39, 'nr': 2, 'nback': 0},
      {'trial': 40, 'nr': 1, 'nback': 0},
      {'trial': 41, 'nr': 2, 'nback': 1},
      {'trial': 42, 'nr': 8, 'nback': 0},
      {'trial': 43, 'nr': 9, 'nback': 0},
      {'trial': 44, 'nr': 7, 'nback': 0}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
    Routine fixcross
    Routine stimulus
    Routine blinksAllowed
  LoopTerminator trials_loop
  Routine end
